//Steps to convert cell builder output to usable template:
// 1. put begintemplate and endtemplate
// 2. call the top procedure "init"
// 3. put public soma, dend, axon, somatic, axonal, basal

begintemplate Cell_A


proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}


public soma, dend, axon, somatic, axonal, basal
create soma, dend[78], axon

proc topol() { local i
  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  connect dend[6](0), dend(1)
  for i = 7, 8 connect dend[i](0), dend[i-1](1)
  connect dend[9](0), dend[7](1)
  connect dend[10](0), dend[6](1)
  for i = 11, 13 connect dend[i](0), dend[i-1](1)
  connect dend[14](0), dend[12](1)
  connect dend[15](0), dend[11](1)
  for i = 16, 17 connect dend[i](0), dend[15](1)
  for i = 18, 19 connect dend[i](0), dend[17](1)
  connect dend[20](0), dend[10](1)
  connect dend[21](0), soma(0.5)
  for i = 22, 23 connect dend[i](0), dend[i-1](1)
  connect dend[24](0), dend[22](1)
  connect dend[25](0), dend[21](1)
  for i = 26, 28 connect dend[i](0), dend[i-1](1)
  connect dend[29](0), dend[27](1)
  connect dend[30](0), dend[26](1)
  connect dend[31](0), dend[25](1)
  connect dend[32](0), soma(0.5)
  for i = 33, 34 connect dend[i](0), dend[i-1](1)
  connect dend[35](0), dend[33](1)
  connect dend[36](0), dend[32](1)
  for i = 37, 38 connect dend[i](0), dend[36](1)
  connect dend[39](0), soma(0.5)
  for i = 40, 41 connect dend[i](0), dend[i-1](1)
  connect dend[42](0), dend[40](1)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  connect dend[45](0), dend[39](1)
  connect dend[46](0), soma(0.5)
  for i = 47, 48 connect dend[i](0), dend[i-1](1)
  connect dend[49](0), dend[47](1)
  for i = 50, 51 connect dend[i](0), dend[i-1](1)
  connect dend[52](0), dend[50](1)
  connect dend[53](0), dend[49](1)
  connect dend[54](0), dend[46](1)
  for i = 55, 56 connect dend[i](0), dend[i-1](1)
  connect dend[57](0), dend[55](1)
  for i = 58, 59 connect dend[i](0), dend[57](1)
  for i = 60, 61 connect dend[i](0), dend[59](1)
  connect dend[62](0), dend[54](1)
  for i = 63, 64 connect dend[i](0), dend[62](1)
  connect dend[65](0), soma(0.5)
  for i = 66, 67 connect dend[i](0), dend[65](1)
  for i = 68, 69 connect dend[i](0), dend[i-1](1)
  connect dend[70](0), dend[68](1)
  for i = 71, 72 connect dend[i](0), dend[70](1)
  for i = 73, 74 connect dend[i](0), dend[i-1](1)
  connect dend[75](0), dend[73](1)
  connect dend[76](0), dend[72](1)
  connect dend[77](0), dend[67](1)
  connect axon(0), soma(0.5)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-5.41443, 0, 0, 10.8289)
	pt3dadd(0, 0, 0, 10.8289)
	pt3dadd(5.41443, 0, 0, 10.8289)
  }
  dend {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(8.46, 4.67, -12.22, 1.87)
	pt3dadd(9.32, 5.05, -12.22, 1.87)
	pt3dadd(11.28, 6.96, -12.22, 1.2)
	pt3dadd(13.86, 8.9, -12.22, 1.2)
  }
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  }
}
proc shape3d_2() {
  dend[14] {	pt3dadd(-42.85, 98.29, -76.16, 0.54)
	pt3dadd(-45.92, 96.98, -77.51, 0.54)
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  }
}
proc shape3d_3() {
  dend[26] {	pt3dadd(38.18, -33.54, -38.08, 0.6)
  }
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  }
}
proc shape3d_4() {
  dend[38] {	pt3dadd(-33.63, -78.8, -34, 0.6)
	pt3dadd(-35.85, -81.73, -34, 0.6)
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  }
}
proc shape3d_5() {
  dend[48] {	pt3dadd(-20.43, -53.58, -76.16, 0.66)
	pt3dadd(-20.92, -56.46, -76.16, 0.66)
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  }
}
proc shape3d_6() {
  dend[59] {	pt3dadd(0.31, 74.14, -28.55, 0.6)
	pt3dadd(0.17, 76.45, -28.55, 0.6)
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  }
}
proc shape3d_7() {
  dend[71] {	pt3dadd(-14.63, 115.4, -1.36, 0.42)
	pt3dadd(-15.88, 120.24, -1.36, 0.42)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    for i=0, 77 dend[i] all.append()
    axon all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 77 dend[i] basal.append()

}
proc geom() {
  forsec axonal {  L = 100  diam = 1  }
  forsec basal {  L = 100  diam = 1  }
  soma {  L = 100  diam = 1  }
}
proc geom_nseg() {
}

proc biophys() {
  forsec somatic {
    Ra = 35.4
    cm = 1
    insert hh
      gnabar_hh = 0.12
      gkbar_hh = 0.036
      gl_hh = 0.0003
      el_hh = -54.3
  }
  forsec axonal {
    Ra = 35.4
    cm = 1
    insert hh
      gnabar_hh = 0.12
      gkbar_hh = 0.036
      gl_hh = 0.0003
      el_hh = -54.3
  }
  forsec basal {
    insert pas
      g_pas = 0.001
      e_pas = -70
    Ra = 35.4
    cm = 1
  }
  soma {
    Ra = 35.4
    cm = 1
    insert hh
      gnabar_hh = 0.12
      gkbar_hh = 0.036
      gl_hh = 0.0003
      el_hh = -54.3
  }
}
access soma
 
 
 
 
endtemplate Cell_A

