{load_file("nrngui.hoc")}
{load_file("Cell_template.hoc")}
{load_file("graphics_lib.hoc")}

num_sites = 3 //This will be the number of synapses or electrodes to be placed
double p[num_sites]

p[0] = 0 //soma
p[1] = 25 //dendrite 25
p[2] = 55 //dendrite 55
 
tstop = 1000 // in ms
objref Cell
Cell = new Cell_A()

//Get number of dendrites
i=0 
forsec Cell.basal i=i+1 
numdend=i

//Set up vectors to record voltages
objref voltages[numdend+1],pas_curr[numdend+1],fvolt[numdend+1],fcurr[numdend+1]

voltages[0] = new Vector()
voltages[0].record(&Cell.soma.v(0.5)) //Record from soma

for i=0,numdend-1 {
	voltages[i+1] = new Vector()
	pas_curr[i+1] = new Vector()
	voltages[i+1].record(&Cell.dend[i].v(0.5)) //Record voltage from dendrites
	pas_curr[i+1].record(&Cell.dend[i].i_pas(0.5))
}

//////  Use this to create a current injection   ///////
//objectvar stim
//Cell.dend[0] stim = new IClamp(0.5) //creating current clamp in the middle of the soma
//stim.del = 200 // in ms
//stim.dur = 500 // in ms
//stim.amp = 0.8 // in nA
/////////////////////////////////////////////////////////


///////   Use this to create a spike train input ////////
objectvar syn[numdend+1], stim, ncn[numdend+1]

Cell.soma syn[0] = new Exp2Syn(0.5) // Create synapse on soma
for i=0,numdend-1 {Cell.dend[i] syn[i+1] = new Exp2Syn(0.5)} //Create synapses on dendrites

stim = new NetStim()
stim.interval = 100
stim.number = 5
stim.start = 200

for i=0,num_sites-1 {
	ncn[p[i]] = new NetCon(stim, syn[p[i]])
	ncn[p[i]].weight = 1
}
/////////////////////////////////////////////////////////

nrnpointmenu(stim)
nrncontrolmenu()
nrnsecmenu(.5,1)

v_init = -70

init()
run()

//Print soma voltage to file
fvolt[0] = new File()
fvolt[0].wopen("./v_out/somav.dat")
voltages[0].printf(fvolt[0])
fvolt[0].close()

//Print dendrite voltages to files in v_out
strdef tstr
for i=0,numdend-1 {
	fvolt[i+1] = new File()
	sprint(tstr,"./v_out/dend%dv.dat",i+1)
	fvolt[i+1].wopen(tstr)
	voltages[i+1].printf(fvolt[i+1])
	fvolt[i+1].close()
	
	fcurr[i+1] = new File()
	sprint(tstr,"./i_out/dend%di.dat",i+1)
	fcurr[i+1].wopen(tstr)
	pas_curr[i+1].printf(fcurr[i+1])
	fcurr[i+1].close()
}

//quit()
